PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = project
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    TextComponent Stimuli
      color = -1.0000, -1.0000, 0.0902
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $number
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    KeyboardComponent key_resp
      allowedKeys = 'o','e'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine start
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see numbers and words from 1 to 20. You will also see simple addition and subtraction in the form of numbers and words.

        You need to choose whether the response should be odd or even.
        If odd, press 'o' key
        If even, press 'e' key

        Press space bar to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Project conditions 1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'number': 1, 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': 2, 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'},
      {'number': 3, 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': 4, 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'},
      {'number': 5, 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': 6, 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'},
      {'number': 7, 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': 8, 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'},
      {'number': 9, 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': 10, 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'},
      {'number': 11, 'parity': 'odd', 'corrAns': 'o', 'size': 'large', 'format': 'numerals'},
      {'number': 12, 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': 13, 'parity': 'odd', 'corrAns': 'o', 'size': 'large', 'format': 'numerals'},
      {'number': 14, 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': 15, 'parity': 'odd', 'corrAns': 'o', 'size': 'large', 'format': 'numerals'},
      {'number': 16, 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': 17, 'parity': 'odd', 'corrAns': 'o', 'size': 'large', 'format': 'numerals'}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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Project conditions 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'number': '7 + 4', 'parity': 'odd', 'corrAns': 'o', 'size': 'large', 'format': 'numerals'},
      {'number': '9 + 9', 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': '2 + 3', 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': '10 + 6', 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': '6 + 7', 'parity': 'odd', 'corrAns': 'o', 'size': 'large', 'format': 'numerals'},
      {'number': '9 + 7', 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': '1 + 10', 'parity': 'odd', 'corrAns': 'o', 'size': 'large', 'format': 'numerals'},
      {'number': '9 + 3', 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': '4 + 5', 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': '8 + 6', 'parity': 'even', 'corrAns': 'e', 'size': 'large', 'format': 'numerals'},
      {'number': '5 - 2', 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': '9 - 5', 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'},
      {'number': '7 - 2', 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': '8 - 4', 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'},
      {'number': '3 - 2', 'parity': 'odd', 'corrAns': 'o', 'size': 'small', 'format': 'numerals'},
      {'number': '10 - 6', 'parity': 'even', 'corrAns': 'e', 'size': 'small', 'format': 'numerals'}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
    Routine trial
  LoopTerminator trials_2
